PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = delay_discounting_experiment6
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" +" or" +         " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/discounting.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 28, 'future_reward': 55, 'delay': 13},
      {'reward_today': 75, 'future_reward': 95, 'delay': 84},
      {'reward_today': 29, 'future_reward': 85, 'delay': 6},
      {'reward_today': 75, 'future_reward': 109, 'delay': 54},
      {'reward_today': 87, 'future_reward': 97, 'delay': 103},
      {'reward_today': 53, 'future_reward': 85, 'delay': 9},
      {'reward_today': 32, 'future_reward': 88, 'delay': 4},
      {'reward_today': 12, 'future_reward': 66, 'delay': 45},
      {'reward_today': 49, 'future_reward': 75, 'delay': 47},
      {'reward_today': 75, 'future_reward': 66, 'delay': 9},
      {'reward_today': 21, 'future_reward': 87, 'delay': 60},
      {'reward_today': 74, 'future_reward': 98, 'delay': 56},
      {'reward_today': 28, 'future_reward': 34, 'delay': 76},
      {'reward_today': 43, 'future_reward': 47, 'delay': 8},
      {'reward_today': 54, 'future_reward': 85, 'delay': 56},
      {'reward_today': 86, 'future_reward': 90, 'delay': 103},
      {'reward_today': 43, 'future_reward': 50, 'delay': 87},
      {'reward_today': 14, 'future_reward': 53, 'delay': 87},
      {'reward_today': 35, 'future_reward': 55, 'delay': 65},
      {'reward_today': 43, 'future_reward': 76, 'delay': 12}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
    Routine trial
  LoopTerminator trials
